'<ADbasic Header, Headerversion 001.001>
' Process_Number                 = 9
' Initial_Processdelay           = 300
' Eventsource                    = Timer
' Control_long_Delays_for_Stop   = No
' Priority                       = High
' Version                        = 1
' ADbasic_Version                = 5.0.8
' Optimize                       = Yes
' Optimize_Level                 = 1
' Info_Last_Save                 = TUD276629  TUD276629\localadmin
'<Header End>
' this program implements single-shot readout fully controlled by ADwin Gold II
'
' protocol:
' mode  0:  repump pulse, 
'           photon counting just for statistics
' mode  1:  Ex/A pulse, photon counting  ->  CR check
'           fail: -> mode 0
' mode  2:  spin pumping with Ex or A pulse, photon counting for time dependence of SP
' mode  3:  optional: spin pumping with Ex or A pulse, photon counting for postselection on 0 counts
'           counts > 0 -> mode 1
' mode  4:  optional: trigger for AWG sequence, or static wait time
' mode  5:  Ex pulse and photon counting for spin-readout with time dependence
'           -> mode 1
'
' parameters:
' integer parameters: DATA_20[i]
' index i   description
'   1       counter_channel
'   2       repump_laser_DAC_channel
'   3       Ex_laser_DAC_channel
'   4       A_laser_DAC_channel
'   5       AWG_start_DO_channel
'   6       AWG_done_DI_channel
'   7       send_AWG_start
'   8       wait_for_AWG_done
'   9       repump_duration       (durations in process cycles)
'  10       CR_duration
'  11       SP_duration
'  XXX 12       SP_filter_duration
'  12       sweep length
'  13       sequence_wait_time
'  14       wait_after_pulse_duration
'  15       CR_preselect
'  16       SSRO_repetitions
'  17       SSRO_duration
'  18       SSRO_stop_after_first_photon
'  19       cycle_duration              (in processor clock cycles, 3.333ns)
'  20       CR_probe                   
'  21       repump_after_repetitions
'  22       CR_repump

' float parameters: DATA_21[i]
' index i   description
'   1       repump_voltage
'   2       repump_off_voltage
'   3       Ex_CR_voltage
'   4       A_CR_voltage
'   5       Ex_SP_voltage
'   6       A_SP_voltage
'   7       Ex_RO_voltage
'   8       A_RO_voltage

' return values:
' Data_24[SP_duration]                 time dependence SP
' Data_25[SSRO_duration*repetitions]   spin readout
' Data_26[...]                         statistics
'   1   repumps
'   2   CR_failed
'   3   CR_failed

#INCLUDE ADwinGoldII.inc
#INCLUDE Math.inc

#DEFINE max_repetitions 20000
#DEFINE max_SP_bins       500
#DEFINE max_SSRO_dim  1000000
#DEFINE max_stat           10

DIM DATA_20[25] AS LONG               ' integer parameters
DIM DATA_21[10] AS FLOAT              ' float parameters
DIM DATA_22[max_repetitions] AS LONG AT EM_LOCAL  ' CR counts before sequence
DIM DATA_23[max_repetitions] AS LONG AT EM_LOCAL  ' CR counts after sequence
DIM DATA_24[max_SP_bins] AS LONG AT EM_LOCAL      ' SP counts
DIM DATA_25[max_SSRO_dim] AS LONG AT DRAM_EXTERN  ' SSRO counts
DIM DATA_26[max_stat] AS LONG AT EM_LOCAL         ' statistics

DIM counter_channel AS LONG
DIM repump_laser_DAC_channel AS LONG
DIM Ex_laser_DAC_channel AS LONG
DIM A_laser_DAC_channel AS LONG
DIM AWG_start_DO_channel AS LONG
DIM AWG_done_DI_channel AS LONG
DIM send_AWG_start AS LONG
DIM wait_for_AWG_done AS LONG
DIM repump_duration AS LONG
DIM CR_duration AS LONG
DIM SP_duration AS LONG
' DIM SP_filter_duration AS LONG
DIM sequence_wait_time AS LONG
DIM wait_after_pulse_duration AS LONG
DIM SSRO_repetitions AS LONG
DIM SSRO_duration AS LONG
DIM SSRO_stop_after_first_photon AS LONG
DIM cycle_duration AS LONG
DIM sweep_length as long
DIM sweep_index as long

DIM repump_voltage AS FLOAT
DIM repump_off_voltage AS FLOAT
DIM Ex_CR_voltage AS FLOAT
DIM A_CR_voltage AS FLOAT
DIM Ex_SP_voltage AS FLOAT
DIM A_SP_voltage AS FLOAT
DIM Ex_RO_voltage AS FLOAT
DIM A_RO_voltage AS FLOAT
DIM Ex_off_voltage AS FLOAT
DIM A_off_voltage AS FLOAT

DIM timer, mode, i AS LONG
DIM aux_timer AS LONG
DIM AWG_done AS LONG
DIM wait_after_pulse AS LONG
DIM repetition_counter AS LONG
DIM repumps AS LONG
' DIM CR_failed AS LONG
' DIM total_repump_counts AS LONG
DIM counter_pattern AS LONG
DIM AWG_done_DI_pattern AS LONG
DIM counts, cr_counts AS LONG
DIM first AS LONG

DIM current_cr_threshold AS LONG
DIM CR_probe AS LONG
DIM CR_preselect AS LONG
DIM CR_repump AS LONG

INIT:
  counter_channel              = DATA_20[1]
  repump_laser_DAC_channel      = DATA_20[2]
  Ex_laser_DAC_channel         = DATA_20[3]
  A_laser_DAC_channel          = DATA_20[4]
  AWG_start_DO_channel         = DATA_20[5]
  AWG_done_DI_channel          = DATA_20[6]
  send_AWG_start               = DATA_20[7]
  wait_for_AWG_done            = DATA_20[8]
  repump_duration              = DATA_20[9]
  CR_duration                  = DATA_20[10]
  SP_duration                  = DATA_20[11]
  ' SP_filter_duration           = DATA_20[12]
  sweep_length                 = DATA_20[12]
  sequence_wait_time           = DATA_20[13]
  wait_after_pulse_duration    = DATA_20[14]
  CR_preselect                 = DATA_20[15]
  SSRO_repetitions             = DATA_20[16]
  SSRO_duration                = DATA_20[17]
  SSRO_stop_after_first_photon = DATA_20[18]
  cycle_duration               = DATA_20[19]
  CR_probe                     = DATA_20[20]
  CR_repump                    = DATA_20[21]
  
  repump_voltage               = DATA_21[1]
  repump_off_voltage           = DATA_21[2]
  Ex_CR_voltage                = DATA_21[3]
  A_CR_voltage                 = DATA_21[4]
  Ex_SP_voltage                = DATA_21[5]
  A_SP_voltage                 = DATA_21[6]
  Ex_RO_voltage                = DATA_21[7]
  A_RO_voltage                 = DATA_21[8]
  Ex_off_voltage               = DATA_21[9]
  A_off_voltage                = DATA_21[10]
 
  FOR i = 1 TO SSRO_repetitions
    DATA_22[i] = 0
    DATA_23[i] = 0
  NEXT i
  
  FOR i = 1 TO max_SP_bins
    DATA_24[i] = 0
  NEXT i
  
  FOR i = 1 TO sweep_length
    DATA_25[i] = 0
  NEXT i
  
  FOR i = 1 TO max_stat
    DATA_26[i] = 0
  NEXT i
  
  AWG_done_DI_pattern = 2 ^ AWG_done_DI_channel
  counter_pattern     = 2 ^ (counter_channel-1)

  repetition_counter  = 0
  first               = 0
  wait_after_pulse    = 0
  counts              = 0
  cr_counts           = 0
      
  DAC(repump_laser_DAC_channel, 3277*repump_off_voltage+32768) ' turn off repump
  DAC(Ex_laser_DAC_channel, 3277*Ex_off_voltage+32768) ' turn off Ex laser
  DAC(A_laser_DAC_channel, 3277*A_off_voltage+32768) ' turn off Ex laser

  CNT_ENABLE(0000b)'turn off all counters
  CNT_MODE(counter_channel,00001000b) 'configure counter

  CONF_DIO(11)      'configure DIO 08:15 as input, all other ports as output
  DIGOUT(AWG_start_DO_channel,0)

  sweep_index = 1
  mode = 0
  timer = 0
  processdelay = cycle_duration  
  
  Par_73 = repetition_counter
  PAR_70 = 0                      ' cumulative counts from probe intervals
  PAR_71 = 0                      ' below CR threshold events
  PAR_72 = 0                      ' number of CR checks performed (lt1)
  Par_75 = CR_preselect
  Par_68 = CR_probe
  Par_69 = CR_repump              
  par_76 = 0                      ' cumulative counts during repumping
  Par_80 = 0                      ' cumulative counts in PSB when not CR chekging or repummping 
 
  current_cr_threshold = CR_preselect

EVENT:
  CR_preselect                 = PAR_75
  CR_probe                     = PAR_68

  IF (wait_after_pulse > 0) THEN
    wait_after_pulse = wait_after_pulse - 1
  ELSE
    if (timer = 0) then
      inc(data_26[mode+1])
    endif
    
    SELECTCASE mode
      CASE 0    ' repump
        IF (timer = 0) THEN
          IF  (cr_counts < CR_repump)  THEN  'only repump after x SSRO repetitions
            CNT_CLEAR( counter_pattern)    'clear counter
            CNT_ENABLE(counter_pattern)    'turn on counter
            DAC(repump_laser_DAC_channel, 3277*repump_voltage+32768) ' turn on repump
          ELSE
            mode = 1
            timer = -1
            current_CR_threshold = CR_preselect
          ENDIF
        endif
         
        IF (timer = repump_duration) THEN
          DAC(repump_laser_DAC_channel, 3277*repump_off_voltage+32768) ' turn off repump laser
          counts = CNT_READ(counter_channel)
          CNT_ENABLE(0)
          PAR_76 = par_76 + counts
          
          mode = 1
          timer = -1
          wait_after_pulse = wait_after_pulse_duration
          current_cr_threshold = CR_preselect
        ENDIF

      CASE 1    ' Ex/A laser CR check
        IF (timer = 0) THEN
          DAC(Ex_laser_DAC_channel, 3277*Ex_CR_voltage+32768) ' turn on Ex laser
          DAC(A_laser_DAC_channel, 3277*A_CR_voltage+32768) ' turn on A laser
          CNT_CLEAR( counter_pattern)    'clear counter
          CNT_ENABLE(counter_pattern)    'turn on counter
          INC(PAR_72)
        ELSE 
          IF (timer = CR_duration) THEN
            DAC(Ex_laser_DAC_channel, 3277*Ex_off_voltage+32768) ' turn off Ex laser
            DAC(A_laser_DAC_channel, 3277*A_off_voltage+32768) ' turn off A laser
            cr_counts = CNT_READ(counter_channel)
            CNT_ENABLE(0)
            
            PAR_70 = PAR_70 + cr_counts
            IF (first > 0) THEN ' first CR after SSRO sequence
              DATA_23[repetition_counter] = cr_counts
              first = 0
            ENDIF            
            
            IF (cr_counts < current_cr_threshold) THEN
              mode = 0
              inc(PAR_71)
            ELSE
              mode = 2
              DATA_22[repetition_counter+1] = cr_counts
              current_cr_threshold = CR_probe
            ENDIF
            timer = -1
            wait_after_pulse = wait_after_pulse_duration
          ENDIF         
        ENDIF

      CASE 2    ' Ex or A laser spin pumping
        IF (timer = 0) THEN
          DAC(Ex_laser_DAC_channel, 3277*Ex_SP_voltage+32768) ' turn on Ex laser
          DAC(A_laser_DAC_channel, 3277*A_SP_voltage+32768)   ' turn on A laser
          CNT_CLEAR( counter_pattern)    'clear counter
          CNT_ENABLE(counter_pattern)    'turn on counter
        else
          CNT_CLEAR( counter_pattern)    'clear counter
          CNT_ENABLE(counter_pattern)    'turn on counter
          counts = CNT_READ(counter_channel)
          DATA_24[timer] = DATA_24[timer] + counts
        Endif

        IF (timer = SP_duration) THEN
          CNT_ENABLE(0)
          DAC(Ex_laser_DAC_channel, 3277*Ex_off_voltage+32768) ' turn off Ex laser
          DAC(A_laser_DAC_channel, 3277*A_off_voltage+32768) ' turn off A laser                
          
          IF ((send_AWG_start > 0) or (sequence_wait_time > 0)) THEN
            mode = 3
          ELSE
            mode = 4
          ENDIF
          
          wait_after_pulse = wait_after_pulse_duration
          timer = -1
        ENDIF
      
      CASE 3    '  wait for AWG sequence or for fixed duration
        IF (timer = 0) THEN
          IF (send_AWG_start > 0) THEN
            DIGOUT(AWG_start_DO_channel,1)  ' AWG trigger
            CPU_SLEEP(9)               ' need >= 20ns pulse width; adwin needs >= 9 as arg, which is 9*10ns
            DIGOUT(AWG_start_DO_channel,0)
          ENDIF
          aux_timer = 0
          AWG_done = 0
        endif
         
        IF (wait_for_AWG_done > 0) THEN 
          IF (AWG_done = 0) THEN
            IF (DIGIN(AWG_done_DI_channel) > 0) THEN
              AWG_done = 1
              IF (sequence_wait_time > 0) THEN
                aux_timer = timer
              ELSE
                mode = 4
                timer = -1
                wait_after_pulse = 0
              ENDIF
            ENDIF
          ELSE
            IF (timer - aux_timer >= sequence_wait_time) THEN
              mode = 4
              timer = -1
              wait_after_pulse = 0
            ENDIF
          ENDIF
        ELSE
          IF (timer >= sequence_wait_time) THEN
            mode = 4
            timer = -1
            wait_after_pulse = 0
            'ELSE
            'CPU_SLEEP(9)
          ENDIF
        ENDIF
     
      CASE 4    ' spin readout
        IF (timer = 0) THEN
          CNT_CLEAR( counter_pattern)    'clear counter
          CNT_ENABLE(counter_pattern)    'turn on counter
          DAC(Ex_laser_DAC_channel, 3277*Ex_RO_voltage+32768) ' turn on Ex laser
          DAC(A_laser_DAC_channel, 3277*A_RO_voltage+32768) ' turn on A laser
        endif
         
        IF (timer = SSRO_duration) THEN
          DAC(Ex_laser_DAC_channel, 3277*Ex_off_voltage+32768) ' turn off Ex laser
          DAC(A_laser_DAC_channel, 3277*A_off_voltage+32768) ' turn off A laser
          counts = CNT_READ(counter_channel)
          CNT_ENABLE(0)

          if (counts > 0) then
            inc(data_25[sweep_index])
          endif
          
          inc(sweep_index)
          if (sweep_index > sweep_length) then
            sweep_index = 1
          endif
          
          mode = 1
          timer = -1
          wait_after_pulse = wait_after_pulse_duration
          inc(repetition_counter)
          Par_73 = repetition_counter
          IF (repetition_counter = SSRO_repetitions) THEN
            END
          ENDIF
          first = 1

        ENDIF
    ENDSELECT
    
    timer = timer + 1
  ENDIF

FINISH:

  


