'<ADbasic Header, Headerversion 001.001>
' Process_Number                 = 9
' Initial_Processdelay           = 300
' Eventsource                    = Timer
' Control_long_Delays_for_Stop   = No
' Priority                       = High
' Version                        = 1
' ADbasic_Version                = 5.0.8
' Optimize                       = Yes
' Optimize_Level                 = 1
' Info_Last_Save                 = TUD276629  TUD276629\localadmin
'<Header End>
' MBI with the adwin, with dynamic CR-preparation, dynamic MBI-success/fail
' recognition, and SSRO at the end. 
'
' protocol:
' 
' modes:
'   0 : Green repump
'   1 : E/A CR check
'   2 : E spin pumping into ms=0
'   3 : MBI
'   4 : A-pumping
'   5 : wait for AWG
'   6 : spin-readout
'
' parameters:
' integer parameters: DATA_20[i]
' index i   description
'   1       counter_channel
'   2       repump_laser_DAC_channel
'   3       Ex_laser_DAC_channel
'   4       A_laser_DAC_channel
'   5       AWG_start_DO_channel
'   6       AWG_done_DI_channel
'   7       green_repump_duration       (durations in process cycles)
'   8       CR_duration 
'   9       SP_E_duration               (pumping time into +/-1 at the beginning)
'  10       wait_after_pulse_duration   (waiting time after MBI AWG pulse ??)
'  11       CR_preselect                (count threshold right after repump)
'  12       RO_repetitions              
'  13       sweep_length                (= number of data points)
'  14       cycle_duration              (in processor clock cycles, 3.333ns)
'  15       CR_probe                    (count threshold after surpassing the threshold in the prev. rd.)
'  16       AWG_event_jump_DO_channel
'  17       MBI_duration                (duration of the MBI pulse (so far Adwin AOM pulse))
'  18       MBI_attempts                (how often we try to to MBI before returning to CR checking)
'  19       MBI_threshold               (photon threshold to assume success (given n, >= n is accepted))
'  20       nr_of_ROsequences           (how many sequences we run after MBI, each of them can contain pumping back on A and readout on E)
'  21       wait_after_RO_pulse_duration

' float parameters: DATA_21[i]
' index i   description
'   1       repump_voltage
'   2       repump_off_voltage
'   3       Ex_CR_voltage
'   4       A_CR_voltage
'   5       Ex_SP_voltage
'   6       Ex_MBI_voltage

' return values:
' Data_22[1]                 CR counts before sequence
' Data_23[1]                 CR counts after sequence
' Data_24[SP_duration]                 time dependence SP
' Data_25[RO_duration]                 spin readout
' Data_26[...]               statistics : how often we entered each mode

#INCLUDE ADwinPro_All.inc
#INCLUDE configuration.inc
#Include Math.inc

#DEFINE max_SP_bins       500
#DEFINE max_RO_dim     200000
#define max_sweep_dim  100000
#DEFINE max_stat           10
#DEFINE max_sequences     100
#define max_time        10000
#define max_mbi_steps     100

DIM DATA_20[35] AS LONG                           ' integer parameters
DIM DATA_21[10] AS FLOAT                          ' float parameters
DIM DATA_22[max_sweep_dim] AS LONG                ' CR counts before sequence
DIM DATA_23[max_sweep_dim] AS LONG                ' CR counts after sequence
DIM DATA_24[max_sweep_dim] AS LONG                ' number of MBI attempts needed
DIM DATA_25[max_sweep_dim] AS LONG                ' number of cycles before success
DIM DATA_26[max_stat] AS LONG AT EM_LOCAL         ' statistics
DIM DATA_27[max_RO_dim] AS LONG AT DRAM_EXTERN    ' SSRO counts
DIM DATA_28[max_sequences] AS LONG                ' A SP durations
DIM DATA_29[max_sequences] AS LONG                ' E RO durations
DIM DATA_30[max_sequences] AS FLOAT               ' A SP voltages
DIM DATA_31[max_sequences] AS FLOAT               ' E RO voltages
DIM DATA_32[max_sequences] AS LONG                ' send AWG start
DIM DATA_33[max_sequences] AS LONG                ' sequence wait times

DIM counter_channel AS LONG
DIM repump_laser_DAC_channel AS LONG
DIM Ex_laser_DAC_channel AS LONG
DIM A_laser_DAC_channel AS LONG
DIM AWG_start_DO_channel AS LONG
DIM AWG_event_jump_DO_channel AS LONG
DIM AWG_done_DI_channel AS LONG
DIM send_AWG_start AS LONG
DIM green_repump_duration AS LONG
DIM CR_duration AS LONG
DIM SP_E_duration AS LONG
DIM SP_filter_duration AS LONG
DIM MBI_duration AS LONG
DIM sequence_wait_time AS LONG
DIM wait_after_pulse_duration AS LONG
DIM RO_repetitions AS LONG
DIM RO_duration AS LONG
DIM cycle_duration AS LONG
DIM sweep_length AS LONG
DIM wait_for_MBI_pulse AS LONG
DIM A_SP_duration AS LONG
DIM MBI_threshold AS LONG
DIM nr_of_ROsequences AS LONG
DIM wait_after_RO_pulse_duration AS LONG

DIM repump_voltage AS FLOAT
DIM repump_off_voltage AS FLOAT
DIM Ex_CR_voltage AS FLOAT
DIM A_CR_voltage AS FLOAT
DIM Ex_SP_voltage AS FLOAT
DIM A_SP_voltage AS FLOAT
DIM Ex_RO_voltage AS FLOAT
DIM A_RO_voltage AS FLOAT
DIM Ex_MBI_voltage AS FLOAT
DIM A_off_voltage as float
dim Ex_off_voltage as float

DIM timer, mode, i, tmp AS LONG
DIM wait_time AS LONG
DIM repetition_counter AS LONG
dim seq_cntr as long
DIM repumps AS LONG
DIM MBI_failed AS LONG
DIM counter_pattern AS LONG
DIM counts AS LONG
DIM first AS LONG
DIM stop_MBI AS LONG
DIM MBI_starts AS LONG
DIM ROseq_cntr AS LONG
dim AWG_done_DI_pattern as long

' MBI stuff
dim next_MBI_stop, next_MBI_laser_stop as long
dim current_MBI_step as long
dim MBI_attempts as long

DIM current_cr_threshold AS LONG
DIM CR_probe AS LONG
DIM CR_preselect AS LONG
DIM cr_counts AS LONG
DIM CR_repump AS LONG
DIM repump_after_repetitions AS LONG

dim awg_in_is_hi, awg_in_was_hi, awg_in_switched_to_hi as long

INIT:
  
  counter_channel              = DATA_20[1]
  repump_laser_DAC_channel     = DATA_20[2]
  Ex_laser_DAC_channel         = DATA_20[3]
  A_laser_DAC_channel          = DATA_20[4]
  AWG_start_DO_channel         = DATA_20[5]
  AWG_done_DI_channel          = DATA_20[6]
  green_repump_duration        = DATA_20[7]
  CR_duration                  = DATA_20[8]
  SP_E_duration                = DATA_20[9]
  wait_after_pulse_duration    = DATA_20[10]
  CR_preselect                 = DATA_20[11]
  RO_repetitions               = DATA_20[12]
  sweep_length                 = DATA_20[13]
  cycle_duration               = DATA_20[14]
  CR_probe                     = DATA_20[15]
  AWG_event_jump_DO_channel    = DATA_20[16]
  MBI_duration                 = DATA_20[17]
  MBI_attempts                 = DATA_20[18]
  MBI_threshold                = DATA_20[19]
  nr_of_ROsequences            = DATA_20[20]
  wait_after_RO_pulse_duration = DATA_20[21]
  repump_after_repetitions     = DATA_20[22]
  CR_repump                    = DATA_20[23]
  
  repump_voltage               = DATA_21[1]
  repump_off_voltage           = DATA_21[2]
  Ex_CR_voltage                = DATA_21[3]
  A_CR_voltage                 = DATA_21[4]
  Ex_SP_voltage                = DATA_21[5]
  Ex_MBI_voltage               = DATA_21[6]
  Ex_off_voltage               = DATA_21[7]
  A_off_voltage                = DATA_21[8]
    
  ' initialize the data arrays
  FOR i = 1 TO max_sweep_dim
    DATA_22[i] = 0
    DATA_23[i] = 0
    DATA_24[i] = 0
    DATA_25[i] = 0
  next i
    
  FOR i = 1 TO max_RO_dim
    DATA_27[i] = 0
  NEXT i
  
  FOR i = 1 TO max_stat
    DATA_26[i] = 0
  NEXT i
       
  counter_pattern     = 2 ^ (counter_channel-1)
  MBI_failed          = 0
  MBI_starts          = 0
  repumps             = 0
  repetition_counter  = 1
  first               = 0
  wait_time           = 0
  stop_MBI            = -2 ' wait_for_MBI_pulse + MBI_duration
  ROseq_cntr          = 1
  seq_cntr            = 1
  par_80 = ROseq_cntr
  
  next_MBI_stop = -2
  current_MBI_step = 1
  next_MBI_laser_stop = -2
  
  AWG_done_DI_pattern = 2 ^ AWG_done_DI_channel
  counter_pattern     = 2 ^ (counter_channel-1)
      
  P2_DAC(DAC_MODULE,repump_laser_DAC_channel, 3277*repump_off_voltage+32768) ' turn off green
  P2_DAC(DAC_MODULE,Ex_laser_DAC_channel, 3277*Ex_off_voltage+32768) ' turn off Ex laser
  P2_DAC(DAC_MODULE,A_laser_DAC_channel, 3277*A_off_voltage+32768) ' turn off A laser

  P2_CNT_ENABLE(CTR_MODULE, 0000b)'turn off all counters
  P2_CNT_MODE(CTR_MODULE,counter_channel,00001000b) 'configure counter

  P2_Digprog(DIO_MODULE,13) ' in  is now 16:23   'configure DIO 08:15 as input, all other ports as output
  P2_DIGOUT(DIO_MODULE,AWG_start_DO_channel,0)
  
  mode = 0
  timer = 0
  processdelay = cycle_duration
  
  awg_in_is_hi = 0
  awg_in_was_hi = 0
  awg_in_switched_to_hi = 0
  
  ' init parameters
  ' Y after the comment means I (wolfgang) checked whether they're actually used
  ' during the modifications of 2013/01/11
  par_68 = CR_probe               ' Y
  par_69 = CR_repump
  PAR_70 = 0                      ' cumulative counts from probe intervals Y
  PAR_71 = 0                      ' below CR threshold events Y
  PAR_72 = 0                      ' number of CR checks performed Y
  PAR_73 = 0                      ' repetition counter
  PAR_74 = 0                      ' MBI failed Y
  par_75 = CR_preselect           ' Y
  par_76 = 0                      ' cumulative counts during repumping Y
  PAR_77 = 0                      ' current mode Y
  PAR_78 = 0                      ' MBI starts Y
  par_79 = 0                      ' timer Y
  PAR_80 = 0                      ' ROseq_cntr Y 
  
  ' some for debugging
  par_59 = 0
  par_60 = 0
  par_61 = 0
  par_62 = 0
  par_63 = 0
  par_64 = 0
  
  current_cr_threshold = CR_preselect
  cr_counts = 0
  
EVENT:
    
  awg_in_was_hi = awg_in_is_hi
  IF (((P2_DIGIN_LONG(DIO_MODULE)) AND (AWG_done_DI_pattern)) > 0) THEN
    awg_in_is_hi = 1
  else
    awg_in_is_hi = 0
  endif

  if ((awg_in_was_hi = 0) and (awg_in_is_hi > 0)) then
    awg_in_switched_to_hi = 1
  else
    awg_in_switched_to_hi = 0
  endif
    
  ' communication with the outside world for user convenience
  CR_preselect = PAR_75
  CR_probe = PAR_68
  CR_repump = PAR_69
  PAR_77 = mode
  
  IF (wait_time > 0) THEN
    wait_time = wait_time - 1
  ELSE
    
    SELECTCASE mode
      
      CASE 0    ' green repump
               
        ' turn on the green laser and start counting
        IF (timer = 0) THEN
          IF ((Mod(repetition_counter,repump_after_repetitions)=0) OR (cr_counts < CR_repump))  THEN  'only repump after x SSRO repetitions
            inc(data_26[mode+1])
            P2_CNT_CLEAR(CTR_MODULE,  counter_pattern)    'clear counter
            P2_CNT_ENABLE(CTR_MODULE, counter_pattern)    'turn on counter
            P2_DAC(DAC_MODULE, repump_laser_DAC_channel, 3277*repump_voltage+32768) ' turn on green
            repumps = repumps + 1
          ELSE
            mode = 1
            timer = -1
            current_CR_threshold = CR_preselect
          ENDIF
          
          inc(data_26[mode+1])
                 
        ELSE 
          
          ' turn off the green laser and get the counts
          ' in any case, we proceed to the CR checking
          IF (timer = green_repump_duration) THEN
            P2_DAC(DAC_MODULE, repump_laser_DAC_channel, 3277*repump_off_voltage+32768) ' turn off green
            counts = P2_CNT_READ(CTR_MODULE, counter_channel)
            P2_CNT_ENABLE(CTR_MODULE, 0)
            par_76 = par_76 + counts
            mode = 1
            timer = -1
            wait_time = wait_after_pulse_duration
            current_cr_threshold = CR_preselect
          ENDIF
        ENDIF
      
      CASE 1    ' Ex/A laser CR check
        
        ' turn on both lasers and start counting
        IF (timer = 0) THEN
          inc(data_26[mode+1])          
          P2_DAC(DAC_MODULE, Ex_laser_DAC_channel, 3277*Ex_CR_voltage+32768) ' turn on Ex laser
          P2_DAC(DAC_MODULE, A_laser_DAC_channel, 3277*A_CR_voltage+32768) ' turn on A laser
          P2_CNT_CLEAR(CTR_MODULE, counter_pattern)    'clear counter
          P2_CNT_ENABLE(CTR_MODULE, counter_pattern)    'turn on counter
          
        ELSE 
          
          ' turn off the lasers, and read the counter
          ' let the user know the accumulated counts and how often we checked
          IF (timer = CR_duration) THEN
            cr_counts = P2_CNT_READ(CTR_MODULE,counter_channel)
            P2_CNT_ENABLE(CTR_MODULE, 0)
            PAR_70 = PAR_70 + cr_counts
            INC(PAR_72)
            
            P2_DAC(DAC_MODULE, Ex_laser_DAC_channel, 3277*Ex_off_voltage+32768) ' turn off Ex laser
            P2_DAC(DAC_MODULE, A_laser_DAC_channel, 3277*A_off_voltage+32768) ' turn off A laser
            DATA_22[seq_cntr] = cr_counts  ' CR before next SSRO sequence
            
            ' if it's the first attempt after a full sequence, we save it.
            ' this allows post-selection on events that where still non-ionized/on resonance
            ' after the run
            IF (first > 0) THEN ' first CR after SSRO sequence
              DATA_23[seq_cntr] = cr_counts
              first = 0
            ENDIF
            
            ' if the counts are below the threshold, we go back to green repumping
            IF (cr_counts < current_cr_threshold) THEN
              mode = 0
              inc(Par_71)
            
              ' else, we proceed to pumping on the E line, into m_s = +/-1,
              ' and set the threshold to probing
            else
              mode = 2
              current_cr_threshold = CR_probe
            ENDIF
                        
            timer = -1
            wait_time = wait_after_pulse_duration
          ENDIF
        ENDIF
      
      CASE 2    ' E spin pumping
        
        ' turn on both lasers and start counting
        IF (timer = 0) THEN
          inc(data_26[mode+1])          
          P2_DAC(DAC_MODULE, Ex_laser_DAC_channel, 3277*Ex_SP_voltage+32768) ' turn on Ex laser
          P2_CNT_CLEAR(CTR_MODULE,  counter_pattern)    'clear counter
          P2_CNT_ENABLE(CTR_MODULE,  counter_pattern)    'turn on counter
        
        ELSE          
          ' turn off the lasers, and read the counter
          IF (timer = SP_E_duration) THEN
            P2_CNT_ENABLE(CTR_MODULE, 0)
            P2_DAC(DAC_MODULE, Ex_laser_DAC_channel, 3277*Ex_off_voltage+32768) ' turn off Ex laser
            P2_DAC(DAC_MODULE, A_laser_DAC_channel, 3277*A_off_voltage+32768) ' turn off A laser
            
            mode = 3
            wait_time = wait_after_pulse_duration
            timer = -1
          ENDIF
        ENDIF
              
      CASE 3    ' MBI
                
        ' MBI starts now; we first need to trigger the AWG to do the selective pi-pulse
        ' then wait until we can assume this is done
        IF(timer=0) THEN
         
          if (current_MBI_step = 1) then
            inc(data_26[mode+1])
            INC(MBI_starts)
            PAR_78 = MBI_starts
            inc(data_25[seq_cntr])
          endif
          
          P2_DIGOUT(DIO_MODULE,AWG_start_DO_channel,1)  ' AWG trigger
          CPU_SLEEP(9)               ' need >= 20ns pulse width; adwin needs >= 9 as arg, which is 9*10ns
          P2_DIGOUT(DIO_MODULE,AWG_start_DO_channel,0)
       
          ' make sure we don't accidentally think we're done before getting the trigger
          next_MBI_stop = -2
        
        else
          ' we expect a trigger from the AWG once it has done the MW pulse
          ' as soon as we assume the AWG has done the MW pulse, we turn on the E-laser,
          ' and start counting
          if(awg_in_switched_to_hi > 0) then
                  
            next_MBI_stop = timer + MBI_duration
            P2_CNT_CLEAR(CTR_MODULE,counter_pattern)    'clear counter
            P2_CNT_ENABLE(CTR_MODULE, counter_pattern)    'turn on counter
            P2_DAC(DAC_MODULE,Ex_laser_DAC_channel, 3277*Ex_MBI_voltage+32768) ' turn on Ex laser
                      
          else            
            IF (timer = next_MBI_stop) THEN
             
              P2_DAC(DAC_MODULE, Ex_laser_DAC_channel, 3277*Ex_off_voltage+32768) ' turn off Ex laser
              counts = P2_CNT_READ(CTR_MODULE, counter_channel)
              P2_CNT_ENABLE(CTR_MODULE, 0)    'turn on counter
                              
              ' MBI succeeds if the counts surpass the threshold;
              ' we then trigger an AWG jump (sequence has to be long enough!) and move on to SP on A
              ' if MBI failes we continue with checking CR again      
              IF (counts < MBI_threshold) THEN
                INC(MBI_failed)
                PAR_74 = MBI_failed
      
                if (current_MBI_step = MBI_attempts) then
                  mode = 1 '(check resonance and start over)
                  current_MBI_step = 1
                else
                  mode = 2
                  inc(current_MBI_step)
                endif 
                timer = -1      
              else
                      
                P2_DIGOUT(DIO_MODULE,AWG_event_jump_DO_channel,1)  ' AWG jump
                CPU_SLEEP(9)               ' need >= 20ns pulse width; adwin needs >= 9 as arg, which is 9*10ns
                P2_DIGOUT(DIO_MODULE,AWG_event_jump_DO_channel,0)
                
                data_24[seq_cntr] = current_MBI_step
                mode = 4
                current_MBI_step = 1
                timer = -1
              endif
              timer = -1
            endif          
          endif
        ENDIF
        
      CASE 4    ' A laser spin pumping
        A_SP_voltage = DATA_30[ROseq_cntr]
        A_SP_duration = DATA_28[ROseq_cntr]
       
        ' turn on A laser; we don't need to count here for the moment
        IF (timer = 0) THEN
          inc(data_26[mode+1])
          P2_DAC(DAC_MODULE,A_laser_DAC_channel, 3277*A_SP_voltage+32768)
        ELSE 
          
          ' when we're done, turn off the laser and proceed to the sequence
          IF (timer = A_SP_duration) THEN
            P2_DAC(DAC_MODULE, Ex_laser_DAC_channel, 3277*Ex_off_voltage+32768) ' turn off Ex laser
            P2_DAC(DAC_MODULE, A_laser_DAC_channel, 3277*A_off_voltage+32768) ' turn off A laser
            wait_time = wait_after_pulse_duration
            
            mode = 5
            timer = -1
          ENDIF
        ENDIF      
      
      CASE 5    '  wait for AWG sequence or for fixed duration
        send_AWG_start = DATA_32[ROseq_cntr]
        sequence_wait_time = DATA_33[ROseq_cntr]
        
        IF (timer = 0) THEN
          inc(data_26[mode+1])
        endif       
       
        ' two options: either run an AWG sequence...
        if(send_AWG_start > 0) then
          
          IF (timer = 0) THEN
            P2_DIGOUT(DIO_MODULE,AWG_start_DO_channel, 1)  ' AWG trigger
            CPU_SLEEP(9)               ' need >= 20ns pulse width; adwin needs >= 9 as arg, which is 9*10ns
            P2_DIGOUT(DIO_MODULE,AWG_start_DO_channel, 0)          
          else
            
            ' we wait for the sequence to be finished. the AWG needs to tell us by a pulse,
            ' of which we detect the falling edge.
            ' we then move on to readout
            if(awg_in_switched_to_hi > 0) then              
              mode = 6
              timer = -1
              wait_time = 0
            endif         
          ENDIF
        
        else
          ' if we do not run an awg sequence, we just wait the specified time, and go then to readout
          mode = 6
          timer = -1
          wait_time = sequence_wait_time
        endif
        
      CASE 6    ' readout on the E line
        RO_duration = DATA_29[ROseq_cntr]
        Ex_RO_Voltage = DATA_31[ROseq_cntr]
        
        IF (timer = 0) THEN
          inc(data_26[mode+1])
          
          P2_CNT_CLEAR(CTR_MODULE,counter_pattern)    'clear counter
          P2_CNT_ENABLE(CTR_MODULE, counter_pattern)    'turn on counter
          P2_DAC(DAC_MODULE,Ex_laser_DAC_channel, 3277 * Ex_RO_voltage + 32768) ' turn on Ex laser
        
        ELSE
          counts = P2_CNT_READ(CTR_MODULE,counter_channel) 
          
          IF ((timer = RO_duration) OR counts > 0) THEN
            P2_DAC(DAC_MODULE,Ex_laser_DAC_channel, 3277*Ex_off_voltage+32768) ' turn off Ex laser

            IF (counts > 0) THEN
              i = repetition_counter
              inc(DATA_27[i])
            ENDIF
                    
            wait_time = wait_after_RO_pulse_duration
            P2_CNT_ENABLE(CTR_MODULE, 0)
                        
            inc(ROseq_cntr)
            par_80 = ROseq_cntr
            
            inc(repetition_counter)
            Par_73 = repetition_counter
                      
            IF (ROseq_cntr = nr_of_ROsequences+1) THEN ' this means we're done with one full run
              inc(seq_cntr)
              mode = 1
              timer = -1                
              first = 1
              ROseq_cntr = 1
              
              ' we're done once we're at the last repetition and the last RO step
              IF (repetition_counter = RO_repetitions+1) THEN
                dec(repetition_counter)
                END
              ENDIF
                 
            ELSE
              ' means we're starting the next ROsequence
              mode = 4
              timer = -1
            ENDIF
          ENDIF
        endif
    endselect
    
    timer = timer + 1
    par_79 = timer
    
  endif
  
  't1 = read_timer() - t0
  'inc(data_40[t1])
    
FINISH:
  ' DATA_26[1] = repumps
  ' DATA_26[2] = total_repump_counts
  ' DATA_26[3] = CR_failed

